---
API: 2
OpenSesame: 3.0.6
Platform: nt
---
set width 1024
set uniform_coordinates "yes"
set title "Tutorial-1"
set subject_parity "even"
set subject_nr 0
set start "experiment"
set sampler_backend "legacy"
set mouse_backend "legacy"
set keyboard_backend "legacy"
set height 768
set foreground "#ffffff"
set font_size 20
set font_italic "no"
set font_family "mono"
set font_bold "no"
set experiment_path "C:\Users\Joff\Documents\OneDrive for Business\1 University\0 PhD\Training Programmes\AVS\OpenSesame"
set description "Gaze Cuing Experiment"
set coordinates "uniform"
set compensation 0
set color_backend "legacy"
set clock_backend "legacy"
set canvas_backend "legacy"
set bidi "no"
set background "#000000"

define loop BlockLoop
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "TrialSequence"
	set description "Repeatedly runs another item"
	set cycles 4
	set column_order "target_position;target_letter;distracter_pos;correct_response;gaze_cue"
	set break_if "never"
	setcycle 0 target_position "-300"
	setcycle 0 correct_response "z"
	setcycle 0 distracter_pos "300"
	setcycle 0 gaze_cue "left"
	setcycle 0 target_letter "F"
	setcycle 1 target_position "-300"
	setcycle 1 correct_response "m"
	setcycle 1 distracter_pos "300"
	setcycle 1 gaze_cue "left"
	setcycle 1 target_letter "H"
	setcycle 2 target_position "-300"
	setcycle 2 correct_response "z"
	setcycle 2 distracter_pos "300"
	setcycle 2 gaze_cue "right"
	setcycle 2 target_letter "F"
	setcycle 3 target_position "-300"
	setcycle 3 correct_response "m"
	setcycle 3 distracter_pos "300"
	setcycle 3 gaze_cue "right"
	setcycle 3 target_letter "H"
	run TrialSequence

define sequence BlockSequence
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run ResetFeedback always
	run BlockLoop always
	run calculate_block always
	run Feedback always

define form_text_display EndOfExperiment
	set timeout "infinite"
	set spacing 10
	set rows "1;4;1"
	set only_render "no"
	set ok_text "Ok"
	set margins "50;50;50;50"
	set form_title "<span size=24>Title</span>"
	set form_text "The experiment has finished."
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme "gray"
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define feedback Feedback
	set reset_variables "yes"
	set duration "keypress"
	set description "Provides feedback to the participant"
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="End of block [block]<br /><br />Your average response time was [avg_rt]ms<br /><br />Your average accuracy was [acc]%<br /><br />Press any key to continue." x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Round: [=round]" x=0 y=-288 z_index=0

define sketchpad Fixation_Dot
	set duration 745
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0
	draw fixdot color="#ffffff" show_if=always style=default x=0 y=0 z_index=0

define form_text_display Instructions
	set timeout "infinite"
	set spacing 10
	set rows "1;4;1"
	set only_render "no"
	set ok_text "Ok"
	set margins "50;50;50;50"
	set form_title "Instructions"
	__form_text__
	If you see an F press Z
	
	If you see an H press M
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme "gray"
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define loop PracticeLoop
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "BlockSequence"
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run BlockSequence

define reset_feedback ResetFeedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define sequence TrialSequence
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run Fixation_Dot always
	run neutral_gaze always
	run gaze_cue always
	run target always
	run keyboard_response always
	run incorrect_sound "[correct]=0"
	run logger always

define inline_script calculate_block
	set description "Executes Python code"
	___run__
	# Define new experimental variable called 'block'
	var.set('block', (var.count_BlockLoop + 1))
	__end__
	set _prepare ""

define sequence experiment
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run session always
	run retrieve_variables always
	run welcome always
	run generate_array_1 always
	run Instructions always
	run PracticeLoop always
	run EndOfExperiment always

define sketchpad gaze_cue
	set duration 495
	set description "Displays stimuli"
	draw image center=1 file="gaze_[gaze_cue].png" scale=1 show_if=always x=0 y=0 z_index=0

define inline_script generate_array_1
	set description "Generate a random array of distracters and a target"
	___run__
	t0 = c.show()
	var.response, t1 = kb.get_key()
	var.response_time = t1-t0
	log.write_vars()
	__end__
	___prepare__
	import random
	
	# Create canvas called c
	c = canvas(color='green', penwidth=2)
	print('Canvas size is:', c.size)
	
	# Set starting values for col and row variables
	max_cols = 2
	max_rows = 2
	total_size = max_cols*max_rows
	i, j = max_cols, max_rows
	search_array = [[None] * i for n in range (j)]
	print('Empty search array:', search_array)
	
	# Set lists for distractors and targets
	distractors = ['normal_e', 'mirror_e', 'left_t', 'right_t']
	targets = ['normal_f', 'mirror_f']
	
	# Randomly select distractors to fill search array
	# and then replace one distractor with a random target
	for N in range (max_rows):
		for n in range (max_cols):
			search_array[N][n] = random.choice(distractors)
	
	# !!!!!Set target variable var.random.choice(targets) = 'target'
	search_array[random.randint(0, (max_rows-1))][random.randint(0, (max_cols-1))] = random.choice(targets)
	print('The randomised search array is:', search_array)
	
	# Working up to this point
	
	# Draw letters in search array in a grid
	x = (max_cols-1)*(-20) - 5
	y = (max_rows-1)*(-20) - 5
	for w in range (max_rows):
		for v in range (max_cols):
			if search_array[w][v] == 'normal_e':
				c.line(x, y, x, y+20)
				c.line(x, y, x+10, y)
				c.line(x, y+10, x+10, y+10)
				c.line(x, y+21, x+10, y+21)
				x = x + 40
			elif search_array[w][v] == 'mirror_e':
				c.line(x+11, y, x+11, y+20)
				c.line(x, y, x+10, y)
				c.line(x, y+10, x+10, y+10)
				c.line(x, y+21, x+10, y+21)
				x = x + 40
			elif search_array[w][v] == 'left_t':
				c.line(x, y, x, y+20)
				c.line(x, y+10, x+10, y+10)
				x = x + 40
			elif search_array[w][v] == 'right_t':
				c.line(x+11, y, x+11, y+20)
				c.line(x, y+10, x+10, y+10)
				x = x + 40
			elif search_array[w][v] == 'normal_f':
				c.line(x, y, x, y+20)
				c.line(x, y, x+10, y)
				c.line(x, y+10, x+10, y+10)
				x = x + 40
			elif search_array[w][v] == 'mirror_f':
				c.line(x+11, y, x+11, y+20)
				c.line(x, y, x+10, y)
				c.line(x, y+10, x+10, y+10)
				x = x + 40
			if v == max_cols:
				y = y +40
				x = (max_cols-1)*(-20) - 5
	
	# Create keyboard response
	kb = keyboard(keylist=['left', 'right'])
	__end__

define inline_script generate_array_xy_grid
	set description "Generate a random array of distracters and a target"
	___run__
	c.show()
	clock.sleep(2000)
	__end__
	___prepare__
	# Create canvas called c
	c = canvas(color='green', penwidth=2)
	
	# Set values for i and j
	i = 3
	j = 2
	
	# Draw letter E's in the grid
	for x,y in xy_grid((i, j), 40):
		if (1,1):
			c.line(x, y, x, y+20)
			c.line(x, y, x+10, y)
			c.line(x, y+10, x+10, y+10)
			c.line(x, y+21, x+10, y+21)
		else:
			c.line(x+11, y, x+11, y+20)
			c.line(x, y, x+10, y)
			c.line(x, y+10, x+10, y+10)
			c.line(x, y+21, x+10, y+21)
	__end__

define sampler incorrect_sound
	set volume 1
	set stop_after 0
	set sample "incorrect.ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration "sound"
	set description "Plays a sound file in .wav or .ogg format"

define keyboard_response keyboard_response
	set timeout 2000
	set flush "yes"
	set duration "keypress"
	set description "Collects keyboard responses"
	set allowed_responses "z;m"

define logger logger
	set description "Logs experimental data"
	set auto_log "yes"

define sketchpad neutral_gaze
	set duration 745
	set description "Displays stimuli"
	draw image center=1 file="gaze_neutral.png" scale=1 show_if=always x=0 y=0 z_index=0

define inline_script retrieve_variables
	set description "Executes Python code"
	set _run ""
	___prepare__
	# Import csv module
	import csv
	
	# For sessions 2-25
	if var.session_nr > 1:
	
	# Read previous session csv file into a list of lists, with one list per row
		with open (r'C:\Users\Joff\Documents\OneDrive for Business\1 University\0 PhD\Training Programmes\AVS\OpenSesame\%d-%d.csv' % (var.subject_nr, (var.session_nr - 1)), 'rb') as previous_data:
			data_reader = csv.reader(previous_data, delimiter=',')
			contents = [row for row in data_reader]
	
	# Make a list of dict items (for each row of data)
	# with column names from the top of the csv file as keys, 
	# and the subsequent rows as values
		col_names = contents[0]
		stimuli = [dict(zip(col_names, row)) for row in contents[1:]]
	
	# Transform stimuli to OpenSesame variables
		var.set('prev_acc', (stimuli[len(stimuli)-1]['acc']))
		var.set('prev_rt', (stimuli[len(stimuli)-1]['avg_rt']))
	
	# Set default values for session 1 so that it runs
	# Use 'run if' statements for sketchpad items in actual experiment
	else:
		var.set('prev_acc', 'NA')
		var.set('prev_rt', 'NA')
	__end__

define inline_script session
	set description "Creates next available logfile and sets session number"
	set _run ""
	___prepare__
	import os
	
	# Close the current logfile
	log.close()
	
	# Check for each session number whether a file called
	# `[subject nr]-[session nr].csv` already exists, and pick the first session
	# number which does *not* exist.
	var.session_nr='session_nr'
	for var.session_nr in range(1, 1000):
		path = r'C:\Users\Joff\Documents\OneDrive for Business\1 University\0 PhD\Training Programmes\AVS\OpenSesame\%d-%d.csv' % (var.subject_nr, var.session_nr)
		if not os.path.exists(path):
			break
	print('Using %s' % path)
	
	# Open logfile
	log.open(path)
	__end__

define sketchpad target
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="gaze_[gaze_cue].png" scale=1 show_if=always x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="[target_letter]" x=288 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="" x="[distracter_pos]" y=0 z_index=0
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text=X x="[target_position]" y=0 z_index=0

define sketchpad welcome
	set duration "keypress"
	set description "Displays stimuli"
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Hello!<br /><br />In the previous session:<br /><br />Your average accuracy in the last session was [prev_acc]%.<br /><br />Your average reaction time in the last session was [prev_rt]ms." x=0 y=0 z_index=0
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Press any key to continue" x=0 y=288 z_index=0

